PsychoPy2experiment version="2020.1.2"
Settings
  Data filename = u'out/%s_%s' % (expName, data.getDateStr(format="%Y-%m-%d-%H.%M.%S"))
  Experiment info = {'password': '', 'your position': '', 'rate your expertise (1-10)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1600, 900]
  color = $[-0.9,-0.9,-0.9]
  expName = expert_evaluation
  exportHTML = on Save
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Routines
  Routine prova
    TextComponent prova1
      font = Helvetica
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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      text:
        Any text

        including line breaks
  Routine initial_instructions
    TextComponent text
      letterHeight = 0.06
      pos = (0, +0.3*0)
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Please, read carefully the instructions below.

        Two different segmentations of 7T data will be shown to you.

        Your task is to select the one you think is overall the best (the one you would use for your experiment).

        You have the possibility to change slide with 'left'-'right' arrows and the transparency with 'up'-'down' arrows.

        Press 'space' if you can't decide between the two o 'q' if you can't carry out the task.

        Once the task is complete, you will be notified with a final message.


        Press any key to start.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine final_message
    TextComponent text_3
      font = Helvetica
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Thanks for your collaboration!

        For any question or suggestion please send an email to michele.svanera@glasgow.ac.uk
    ImageComponent image
      image = in/final_message.jpg
      opacity = 0
      pos = (0, -.5)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine trial
    KeyboardComponent end_of_the_routine
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent slice_depth
      Code Type = Both
      Begin Experiment:
        Transparency_level_increment = 0.1
        transparency_level = 0.3
      Begin JS Experiment:
        Transparency_level_increment = 0.1;
        transparency_level = 0.3;
      Begin JS Routine:
        T1_opacity = [0,0,1,0,0];

        slice_depth = 2;     // Slide N [0,4]
      Begin Routine:
        T1_opacity = [0,0,1,0,0]

        slice_depth = 2     # Slide N [0,4]
      Each Frame:
        # Check for input (left and right arrows)
        old_slice_depth = slice_depth
        for key in event.getKeys():
            if key == 'left':
                slice_depth -= 1
            if key == 'right':
                slice_depth += 1
            if key == 'up':
                transparency_level += Transparency_level_increment
            if key == 'down':
                transparency_level -= Transparency_level_increment
            if key == 'q':
                core.quit()
            if key == 'esc':
                core.quit()

        # This avoid mess (repetitions) in the log file
        if old_slice_depth != slice_depth:
            # Set max and min values [0,4]
            slice_depth = np.clip(slice_depth, 0, len(T1_opacity)-1)

            # Set images to display
            T1_opacity = np.zeros((len(T1_opacity),))
            T1_opacity[slice_depth] = 1
      Each JS Frame:
        // Check for input (left and right arrows)
        var old_slice_depth = slice_depth;

        let thisResp = psychoJS.eventManager.getKeys();
        if (thisResp.length > 0) {     // at least one key was pressed
        //    if (thisResp.indexOf('q') > -1) {
        //        return psychoJS.quit('The [q] key was pressed. Goodbye!', false);
        //    } else
            if (thisResp.indexOf('left') > -1) {
                slice_depth -= 1;
            } else if (thisResp.indexOf('right') > -1) {
                slice_depth += 1;
            } else if (thisResp.indexOf('up') > -1) {
                transparency_level += Transparency_level_increment;
            } else if (thisResp.indexOf('down') > -1) {
                transparency_level -= Transparency_level_increment;
            }
            if (thisResp.indexOf('escape') > -1) {
                psychoJS.experiment.experimentEnded = true;
        //        core.quit();
            }
        }

        // Set transparency_level to [0,1]
        if (transparency_level > 1.0) {
            transparency_level = 1.0;
        }else if(transparency_level < 0.0){
            transparency_level = 0.0;
        }

        // This avoid mess (repetitions) in the log file
        if (old_slice_depth != slice_depth){
            // Set max and min values [0,4]
            if (slice_depth > 4.0) {
                slice_depth = 4;
            }else if(slice_depth < 0.0){
                slice_depth = 0.0;
            }

            // Set images to display
            T1_opacity = [0,0,0,0,0];
            T1_opacity[slice_depth] = 1;
        }
    CodeComponent image_R_text_code
      Code Type = Auto->JS
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      Begin Experiment:
        image_R_text_string = ""
      Begin Routine:
        image_R_text_string = "slice " + str(slice_depth-2)
      Each Frame:
        image_R_text_string = "slice " + str(slice_depth-2)
    ImageComponent image_T1_L_m_2
      image [set every repeat] = $T1_slideN_m_2
      opacity [set every frame] = T1_opacity[0]
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_L_m_1
      image [set every repeat] = $T1_slideN_m_1
      opacity [set every frame] = T1_opacity[1]
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_L
      image [set every repeat] = $T1_slideN
      opacity [set every frame] = T1_opacity[2]
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_L_p_1
      image [set every repeat] = $T1_slideN_p_1
      opacity [set every frame] = T1_opacity[3]
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_L_p_2
      image [set every repeat] = $T1_slideN_p_2
      opacity [set every frame] = T1_opacity[4]
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_L_m_2
      image [set every repeat] = $segm_L_slideN_m_2
      opacity [set every frame] = T1_opacity[0]*transparency_level
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_L_m_1
      image [set every repeat] = $segm_L_slideN_m_1
      opacity [set every frame] = T1_opacity[1]*transparency_level
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_L
      image [set every repeat] = $segm_L_slideN
      opacity [set every frame] = T1_opacity[2]*transparency_level
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_L_p_1
      image [set every repeat] = $segm_L_slideN_p_1
      opacity [set every frame] = T1_opacity[3]*transparency_level
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_L_p_2
      image [set every repeat] = $segm_L_slideN_p_2
      opacity [set every frame] = T1_opacity[4]*transparency_level
      pos = (-0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    TextComponent image_L_text
      font = Helvetica
      letterHeight = 0.04
      pos = (-0.5+0.40,0+0.60)
      startVal [time (s)] = 0.0
      text [set every frame] = $image_R_text_string
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    ImageComponent image_T1_R_m_2
      image [set every repeat] = $T1_slideN_m_2
      opacity [set every frame] = T1_opacity[0]
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_R_m_1
      image [set every repeat] = $T1_slideN_m_1
      opacity [set every frame] = T1_opacity[1]
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_R
      image [set every repeat] = $T1_slideN
      opacity [set every frame] = T1_opacity[2]
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_R_p_1
      image [set every repeat] = $T1_slideN_p_1
      opacity [set every frame] = T1_opacity[3]
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_T1_R_p_2
      image [set every repeat] = $T1_slideN_p_2
      opacity [set every frame] = T1_opacity[4]
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_R_m_2
      image [set every repeat] = $segm_R_slideN_m_2
      opacity [set every frame] = T1_opacity[0]*transparency_level
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_R_m_1
      image [set every repeat] = $segm_R_slideN_m_1
      opacity [set every frame] = T1_opacity[1]*transparency_level
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_R
      image [set every repeat] = $segm_R_slideN
      opacity [set every frame] = T1_opacity[2]*transparency_level
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_R_p_1
      image [set every repeat] = $segm_R_slideN_p_1
      opacity [set every frame] = T1_opacity[3]*transparency_level
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    ImageComponent image_segm_R_p_2
      image [set every repeat] = $segm_R_slideN_p_2
      opacity [set every frame] = T1_opacity[4]*transparency_level
      pos = (+0.5,0)
      size = (0.9, 1.1)
      startVal [time (s)] = 0.0
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    TextComponent image_R_text
      font = Helvetica
      letterHeight = 0.04
      pos = (+0.5+0.40,0+0.60)
      startVal [time (s)] = 0.0
      text [set every frame] = $image_R_text_string
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    TextComponent options_esc_space
      font = Helvetica
      letterHeight = 0.06
      pos = (0.80, -0.9)
      startVal [time (s)] = 0.0
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      text:
           'esc' (twice) to exit
            'space' to skip slice
    ImageComponent burron_LR
      image = in/arrows_LR.png
      pos = (0.1, 0.85)
      size = (0.09, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_LR_text
      font = helvetica
      letterHeight = 0.05
      pos = (0.1+0.17, 0.85)
      startVal [time (s)] = 0.0
      text = change slice (L/R)
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    ImageComponent button_UD
      image = in/arrows_UD.png
      pos = (-0.3, 0.85)
      size = (0.05, 0.15)
      startVal [time (s)] = 0.0
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    TextComponent button_UD_text
      font = Helvetica
      letterHeight = 0.05
      pos = (-0.3+0.17, 0.85)
      startVal [time (s)] = 0.0
      text = change opacity (U/D)
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    MouseComponent choise_selection
      clickable = choice_L, choice_R
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    CodeComponent trail_count
      Code Type = Both
      Begin JS Routine:
        trail_count_text = (loop_over_all_images.thisN+1).toString()+
                            "/"+((loop_over_all_images.trialList).length).toString();
      Begin Routine:
        trail_count_text = str(loop_over_all_images.thisN+1)+"/"+str(len(loop_over_all_images.trialList))
      Each Frame:
        trail_count_text = str(loop_over_all_images.thisN+1)+"/"+str(len(loop_over_all_images.trialList))
      Each JS Frame:
        trail_count_text = (loop_over_all_images.thisN+1).toString()+
                            "/"+((loop_over_all_images.trialList).length).toString();
    TextComponent trial_count
      font = Helvetica
      letterHeight = 0.05
      pos = [0.9, +0.9]
      startVal [time (s)] = 0.0
      text [set every frame] = $trail_count_text
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    ImageComponent choice_L
      image = in/choice.png
      pos = (-0.5, -0.7)
      size = (0.1, 0.17)
      startVal [time (s)] = 0.0
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    ImageComponent choice_R
      image = in/choice.png
      pos = (+0.5, -0.7)
      size = (0.1, 0.17)
      startVal [time (s)] = 0.0
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    TextComponent question_asked
      letterHeight = 0.05
      pos = (0,-0.90)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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  Routine password_check
    CodeComponent check_psw
      Code Type = Both
      Begin JS Routine:
        if (expInfo['password'] != 'squash' & expInfo['password'] != 'muckli' & expInfo['password'] != 'ccni'){
            // Need to save everything is important, like log file

        //    // Display error text
        //    text_error_Clock = new util.Clock();
        //    text_error = new visual.TextStim({
        //        win: psychoJS.window,
        //        name: 'text_error',
        //        text: '    Wrong password!\n\nPlease reload the page.',
        //        font: 'Helvetica',
        //        pos: [0, 0], height: 0.1,  wrapWidth: undefined, ori: 0,
        //        color: new util.Color('white'),  opacity: 1,
        //        depth: 0.0
        //    });
        //
        //    routineTimer.add(2.000000);
        //    while (routineTimer.getTime() > 0){
        //
        //          // refresh the screen if continuing
        //          if (continueRoutine) {
        //            return Scheduler.Event.FLIP_REPEAT;
        //          }
        //          else {
        //            return Scheduler.Event.NEXT;
        //          }
        //
        //    }
            // Display error text
            return psychoJS.quit("Sorry that password isn't correct. You can refresh the page to try again.", false);
        }

        //psychoJS.experiment.experimentEnded = true;
      Begin Routine:
        if (expInfo['password'] != 'squash' and expInfo['password'] != 'muckli' and expInfo['password'] != 'ccni'):
            # Need to save everything is important, like log file

            # Display error text
            text_error = visual.TextStim(win=win, name='text_error',
                                        text='    Wrong password!\n\nPlease reload the page.',
                                        font='Helvetica',
                                        pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
                                        color='white', colorSpace='rgb', opacity=1,
                                        languageStyle='LTR',
                                        depth=-1.0);

            timer_error = core.CountdownTimer(2.0)
            while (timer_error.getTime() > 0):
                text_error.draw()
                win.flip() # Update screen

            # make sure everything is closed down
            thisExp.abort()  # or data files will save again on exit
            win.close()
            core.quit()
    CodeComponent check_rate
      Code Type = Both
      Begin Experiment:
        def is_number(s):
            try:
                float(s)
                return True
            except ValueError:
                return False
      Begin JS Routine:
        var rate = expInfo['rate your expertise (1-10)'];

        if (isNaN(rate) || rate > 10 || rate < 0 || !rate || typeof rate == 'undefined'){
            // Display error text
            return psychoJS.quit("Sorry, but the rate isn't correct. You can refresh the page to try again.", false);
        }
      Begin Routine:
        rate_submitted = expInfo['rate your expertise (1-10)']
        check_flag = is_number(rate_submitted)

        if (check_flag == False or float(rate_submitted)>10 or float(rate_submitted)<=0):
            # Need to save everything is important, like log file

            # Display error text
            text_error = visual.TextStim(win=win, name='text_error',
                                        text='Error in rating (are you that bad!?)!\n\n       Please reload the page.',
                                        font='Helvetica',
                                        pos=(0, 0), height=0.1, wrapWidth=None, ori=0,
                                        color='white', colorSpace='rgb', opacity=1,
                                        languageStyle='LTR',
                                        depth=-1.0);

            timer_error = core.CountdownTimer(2.0)
            while (timer_error.getTime() > 0):
                text_error.draw()
                win.flip() # Update screen

            # make sure everything is closed down
            thisExp.abort()  # or data files will save again on exit
            win.close()
            core.quit()
  Routine ready_go
    TextComponent text_2
      font = Helvetica
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Ready? GO!
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Flow
  Routine password_check
  Routine initial_instructions
  Routine ready_go
  LoopInitiator loop_over_all_images loopType="TrialHandler"
    conditionsFile = image_paths.csv
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator loop_over_all_images
  Routine final_message
